PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://csbsutah.co1.qualtrics.com/jfe/form/SV_bkO77dxG6dtzM58
  Data filename = 'data/raw_%s' % (expInfo['Please keep this number!'])
  End Message = Please wait for one moment while we load the final forms.
  Experiment info = {'Please keep this number!': 'f"{randint(0, 999):03.0f}"', 'What letter were you given?': ''}
  Full-screen window = True
  Incomplete URL = https://csbsutah.co1.qualtrics.com/jfe/form/SV_bkO77dxG6dtzM58
  Monitor = testMonitor
  Resources = ['test.csv']
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = SNAC
  frameRateMsg = Loading, please wait...
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Image
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    ImageComponent image
      image [set every repeat] = $imagename
      saveStartStop = False
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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  Routine math_answer
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    TextComponent answers
      color = black
      letterHeight = 0.055
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Please answer the addition problem
      units = norm
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    TextComponent answer_a
      color = black
      letterHeight = 0.08
      pos = (-0.1, -0.075)
      startVal [time (s)] = 0.0
      text [set every repeat] = $a
      units = norm
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    TextComponent answer_b
      color = black
      letterHeight = 0.08
      pos = (0.1, -0.075)
      startVal [time (s)] = 0.0
      text [set every repeat] = $b
      units = norm
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    MouseComponent answer_end
      clickable = answer_a, answer_b
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine vastness
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    TextComponent vast
      color = black
      letterHeight = 0.055
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = How vast was the image?
      units = norm
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    SliderComponent vast_answer
      borderColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = 0,100
      letterHeight = 0.035
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = scrollbar
      ticks = (0,100)
      units = height
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    TextComponent next
      color = gray
      letterHeight = 0.035
      pos = (0, -.17)
      startVal [condition] = vast_answer.getRating() is not None
      text = Submit Score
      units = norm
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    MouseComponent vast_mouse
      clickable = next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = gray
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vastness: a perceptual phenomenon that occurs when a space seems to extend to very far distances, seemingly without limit.
      units = norm
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  Routine time_start
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    TextComponent start_time
      color = black
      letterHeight = 0.055
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = Click the hourglass to start the timer
      units = norm
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    PolygonComponent hg_start_bottom
      fillColor = gray
      lineColor = gray
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent hg_start_top
      fillColor = gray
      lineColor = gray
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent start_time_mouse
      clickable = hg_start_top, hg_start_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine time_end
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    TextComponent end_time
      color = black
      letterHeight = 0.055
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = Click the hourglass to stop the timer
      units = norm
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    PolygonComponent hg_end_bottom
      fillColor = black
      lineColor = black
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent hg_end_top
      fillColor = black
      lineColor = black
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent end_time_mouse
      clickable = hg_end_top, hg_end_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Py
      disabled = True
      Before Experiment:
        import pandas as pd
        import random
        from pathlib import Path

        import sys
        import gc

        # Force garbage collection
        gc.collect()

        # Get participant ID from experiment info
        #pptID = expInfo['participant']

        # Define file paths
        full_file = 'image.durations.full.xlsx'
        equations_file = 'equations.xlsx'
        participant_file = 'ppt.image.durations.xlsx'

        # Flag to track if we need to restart selection
        selection_successful = False
        max_attempts = 5  # Prevent infinite loops
        attempt_count = 0

        while not selection_successful and attempt_count < max_attempts:
            attempt_count += 1
            print(f"\n--- Selection attempt {attempt_count} ---")

            # 1. LOAD THE FILES (fresh each attempt)
            df_full = pd.read_excel(full_file)
            df_equations = pd.read_excel(equations_file)

            # 2. CREATE EMPTY DATAFRAME FOR PARTICIPANT
            df_participant = pd.DataFrame()

            # 3. DEFINE ALL COMBINATIONS TO SELECT
            combinations = [
                ("high arousal nature", 2.3), ("high arousal nature", 3.7),
                ("high arousal nature", 5.1), ("high arousal nature", 6.5),
                ("low arousal nature", 2.3), ("low arousal nature", 3.7),
                ("low arousal nature", 5.1), ("low arousal nature", 6.5),
                ("high arousal urban", 2.3), ("high arousal urban", 3.7),
                ("high arousal urban", 5.1), ("high arousal urban", 6.5),
                ("low arousal urban", 2.3), ("low arousal urban", 3.7),
                ("low arousal urban", 5.1), ("low arousal urban", 6.5)
            ]

            # Shuffle combinations to distribute usage
            random.shuffle(combinations)

            # Track selected image names ONLY (to prevent any repeat of the same image)
            selected_image_names = set()

            # Flag to track if this attempt fails
            attempt_failed = False

            # 4. SELECT 5 ROWS FOR EACH COMBINATION
            for img_type, duration in combinations:
                available = df_full[
                    (df_full['used'] == 'no') &
                    (df_full['type'] == img_type) &
                    (df_full['duration'] == duration)
                ]

                # Filter out any images that have already been selected (at ANY duration)
                available = available[~available['image_name'].isin(selected_image_names)]

                if len(available) < 5:
                    print(f"  SHORTAGE: Only {len(available)} for {img_type}, duration {duration}. Resetting all 'used' to 'no'...")

                    # Reset ALL 'used' values to 'no' in the full file
                    df_full['used'] = 'no'
                    df_full.to_excel(full_file, index=False)

                    # Mark this attempt as failed and break out of the loop
                    attempt_failed = True
                    break

                selected = available.sample(n=5, random_state=None)
                df_participant = pd.concat([df_participant, selected], ignore_index=True)

                # Store ONLY the image names (not the durations)
                selected_image_names.update(selected['image_name'].tolist())
                print(f"  Selected 5 for {img_type}, {duration}")

            # If we didn't fail, selection was successful
            if not attempt_failed:
                selection_successful = True
                print(f"\nSelection successful after {attempt_count} attempt(s)!")
            else:
                print(f"Attempt {attempt_count} failed, trying again...")

        # Check if we exceeded max attempts
        if not selection_successful:
            raise Exception(f"Could not select images after {max_attempts} attempts. Check your image database.")

        # 5. RANDOMIZE THE ORDER OF PARTICIPANT ROWS
        df_participant = df_participant.sample(frac=1, random_state=None).reset_index(drop=True)

        # 6. RANDOMIZE EQUATIONS AND COLUMN BIND
        df_equations_shuffled = df_equations.sample(frac=1, random_state=None).reset_index(drop=True)
        df_equations_shuffled = df_equations_shuffled.head(len(df_participant)).reset_index(drop=True)

        for col in df_equations_shuffled.columns:
            df_participant[col] = df_equations_shuffled[col].values

        # 7. SAVE PARTICIPANT FILE
        df_participant.to_excel(participant_file, index=False)

        # 8. UPDATE FULL FILE - mark selected rows as 'yes'
        for _, row in df_participant.iterrows():
            mask = (df_full['image_name'] == row['image_name']) & (df_full['duration'] == row['duration'])
            df_full.loc[mask, 'used'] = 'yes'

        df_full.to_excel(full_file, index=False)

        print(f"\n{'='*50}")
        print(f"SUCCESS! Created {participant_file}")
  Routine end
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    TextComponent text_2
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Please remember this number, you will need to enter it on the next page:
      units = norm
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = expInfo['Please keep this number!']
      units = norm
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  Routine equations
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    TextComponent math_equation
      color = black
      letterHeight = 0.055
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $equation
      units = norm
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  Routine p_math_answer
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    TextComponent text_10
      color = black
      letterHeight = 0.055
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please answer the addition problem.
      units = norm
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    TextComponent p_a
      color = black
      letterHeight = 0.08
      pos = (-.1, -0.075)
      startVal [time (s)] = 0.0
      text = 48
      units = norm
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    TextComponent p_b
      color = black
      letterHeight = 0.08
      pos = (.1, -.075)
      startVal [time (s)] = 0.0
      text = 43
      units = norm
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    MouseComponent mouse
      clickable = p_a, p_b
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine p_equation
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    TextComponent text_9
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 16 + 27
      units = norm
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  Routine p_image
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    ImageComponent image_6
      image = Beach 2.jpg
      saveStartStop = False
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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  Routine p_time_start
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    TextComponent text_11
      color = black
      letterHeight = 0.055
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = Click the hourglass to start the timer
      units = norm
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    PolygonComponent polygon
      fillColor = gray
      lineColor = gray
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon_2
      fillColor = gray
      lineColor = gray
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = polygon, polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine p_time_end
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    TextComponent text_12
      color = black
      letterHeight = 0.055
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Click the hourglass to stop the timer
      units = norm
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    PolygonComponent polygon_3
      fillColor = black
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon_4
      fillColor = black
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_3
      clickable = polygon_3, polygon_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine p_vastness
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    TextComponent text_13
      color = black
      letterHeight = 0.055
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = How vast was the image?
      units = norm
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    SliderComponent slider
      borderColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = 0, 100
      letterHeight = 0.035
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = scrollbar
      ticks = (0, 100)
      units = height
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    TextComponent text_14
      color = gray
      letterHeight = 0.035
      pos = (0, -0.17)
      startVal [time (s)] = 0.0
      text = Submit Score
      units = norm
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    MouseComponent mouse_4
      clickable = text_14
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = gray
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vastness: a perceptual phenomenon that occurs when a space seems to extend to very far distances, seemingly without limit.
      units = norm
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  Routine start_exp
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        if mouse_5.isPressedIn(yes_option):
            print("Another practice")
            # Force restart of the practice routine
            start_p.finished = False
            start_p.thisN = 0  # Reset to first trial
        elif mouse_5.isPressedIn(no_option):
            print("Continue to main")
            # Let the flow continue naturally
    TextComponent text_16
      color = black
      letterHeight = 0.055
      pos = (0, 0.02)
      startVal [time (s)] = 0.0
      text = Would you like another practice trial?
      units = height
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    TextComponent yes_option
      color = darkgreen
      letterHeight = 0.055
      pos = (-0.2, -0.1)
      startVal [time (s)] = 0.0
      text = YES
      units = norm
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    TextComponent no_option
      color = darkred
      letterHeight = 0.055
      pos = (0.2, -0.1)
      startVal [time (s)] = 0.0
      text = NO
      units = norm
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    MouseComponent mouse_5
      clickable = yes_option, no_option
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start_p
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    TextComponent text_15
      color = black
      letterHeight = 0.055
      startVal [time (s)] = 0.0
      text = Click the spacebar to start the practice trial.
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_e
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    TextComponent text
      color = black
      letterHeight = 0.055
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the next trial.
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catch
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press "c" to continue with the study.
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'c'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        if ((trials.thisN + 1) % 10 !== 0) {
            continueRoutine = false;
        }
Flow
  Routine start_p
  Routine p_equation
  Routine p_image
  Routine p_math_answer
  Routine p_time_start
  Routine p_time_end
  Routine p_vastness
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $Array.from({length: image.durations.full.csv.length}, (_, i) => i).filter(i => image.durations.full.csv[i].group == expInfo['What letter were you given?'])
    conditionsFile = image.durations.full.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imagename', 'HANature/Berman_Nature__32.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '18 + 22'), ('a', 44), ('b', 40), ('answer', 'b')]),
      OrderedDict([('imagename', 'HANature/Berman_Nature__41.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '21 + 25'), ('a', 46), ('b', 40), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Berman_Nature__45.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '17 + 25'), ('a', 42), ('b', 39), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/BotanicGardens_0044.JPG'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '8 + 22'), ('a', 30), ('b', 28), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/BotanicGardens_0059.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '28 + 12'), ('a', 40), ('b', 36), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Hyalite_0084.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '29 + 10'), ('a', 39), ('b', 41), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Hyalite_0218.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'yes'), ('group', 'o'), ('equation', '22 + 7'), ('a', 29), ('b', 31), ('answer', 'a')])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
    Routine start_e
    Routine equations
    Routine Image
    Routine math_answer
    Routine time_start
    Routine time_end
    Routine vastness
    Routine catch
  LoopTerminator trials
  Routine end
